PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = nature-urban-fractal
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine control_video
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    MovieComponent control_video_component
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stimuli/videos/control.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 22
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    MarkEvents MarkEvents plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = control_video_component
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useQuitKeys = True
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        time_recorded = False
      Each Frame:
        if control_video_component.status == STARTED and not time_recorded:
            win.callOnFlip(saveTime, 'control_video_psychopy')
            time_recorded = True
  Routine parent_video
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    MovieComponent parent_video_component
      backend = ffpyplayer
      forceEndRoutine = False
      movie = stimuli/videos/control.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 22
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    MarkEvents MarkEvents_2 plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = parent_video_component
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = condition
      useQuitKeys = True
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        time_recorded = False
      Each Frame:
        if parent_video_component.status == STARTED and not time_recorded:
            win.callOnFlip(saveTime, 'control_video_psychopy')
            time_recorded = True
  Routine slideshow
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    ImageComponent image
      image [set every repeat] = $"stimuli/images/" + condition + "/" + image_name + ".jpg"
      size = (0.5, 0.5)
      startVal [time (s)] = .2
      stopVal [duration (s)] = 2
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    MarkEvents MarkEvents_3 plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = image
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = condition, image_name
      useQuitKeys = True
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        time_recorded = False
      Each Frame:
        if image.status == STARTED and not time_recorded:
            win.callOnFlip(saveTime, 'image') #'image_%s_%i' %(condition, image_loop.thisN)
            time_recorded = True
  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine eyelink_setup
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = True
      hostAddress = 100.1.1.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetSize = 24
      targetType = circle
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    CodeComponent timer_code
      Code Type = Py
      Begin Experiment:
        import time

        def saveTime(label=""):
            wall_clock_time = time.time()
            # globalClock is the format string ('float') until run() builds the real Clock,
            # so a too-early call would otherwise crash here.
            psychopy_time = globalClock.getTime()        # same clock as _ONSET_TIME
            thisExp.addData('sync_wall_%s' % label, wall_clock_time)
            thisExp.addData('sync_psychopy_%s' % label, psychopy_time)

            try:
                el_tracker = pylink.getEYELINK()
                el_tracker.sendMessage('SYNC %s WALL %.6f PSYCHOPY %.6f' % (label, wall_clock_time, psychopy_time))
            except Exception as e:
                logging.warning('EDF sync message failed (%s): %s' % (label, e))
      Begin Routine:
        saveTime('session_start')
      End Experiment:
        saveTime('end_experiment')
  Routine intro
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        Press SPACEBAR to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eyelink_start
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    HostDrawing HostDrawing plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = control_video_component
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetPosition = [0,0]
      targetSize = 24
      targetType = circle
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_stop
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_start_2
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    HostDrawing HostDrawing_2 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = parent_video_component
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    DriftCheck DriftCheck_2 plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetPosition = [0,0]
      targetSize = 24
      targetType = circle
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    StartRecording StartRecord_2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_start_image
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    HostDrawing HostDrawing_3 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = image
      imagesToHostBackdrop = $"stimuli/images/" + condition + "/" + image_name + ".jpg", image
      recordStatusMessage = "Trial %s" % image_loop.thisN
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    DriftCheck DriftCheck_3 plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetPosition = [0,0]
      targetSize = 24
      targetType = circle
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    StartRecording StartRecord_3 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine end_experiment
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    TextComponent fin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = The experiment is now over, please contact the experimenter
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  Routine clapperboard
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    TextComponent one
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent two
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent three
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent exit_sync_instr
      letterHeight = 0.05
      startVal [time (s)] = 3
      text = Press 'spacebar' to continue, or 'r' to retry
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    PolygonComponent tap_flash
      fillColor = white
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.1
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    SoundComponent tap_beep
      forceEndRoutine = False
      sound [set every repeat] = 440
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.1
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    CodeComponent sync_code
      Code Type = Py
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      Begin Routine:
        time_recorded = False
        retry = False
      Each Frame:
        if tap_flash.status == STARTED and not time_recorded:
            win.callOnFlip(saveTime, 'clap')
            time_recorded = True

        if tap_flash.status == FINISHED:
            keys = sync_resp.getKeys(keyList=['r', 'space'], waitRelease=False)
            for k in keys:
                if k.name == 'r':
                    retry = True
                    continueRoutine = False
                elif k.name == 'space':
                    continueRoutine = False
      End Routine:
        if not retry:
            flash_t = thisExp.getLatestEntry().get('flash_onset_abs')
            if flash_t is not None:
                sync_loop.finished = True
            else:
                # somehow flash didn't log — retry instead of crashing
                retry = True
                pass
    KeyboardComponent sync_resp
      allowedKeys = 'r','space'
      forceEndRoutine = False
      startVal [time (s)] = 3.0
      store = all keys
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Flow
  Routine intro
  Routine eyelink_setup
  LoopInitiator sync_loop loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine clapperboard
  LoopTerminator sync_loop
  Routine fixation
  Routine eyelink_start
  Routine control_video
  Routine eyelink_stop
  LoopInitiator conditions_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'nature')]),
      OrderedDict([('condition', 'urban')]),
      OrderedDict([('condition', 'nature_fractal')]),
      OrderedDict([('condition', 'urban_fractal')])]
    Routine fixation
    Routine eyelink_start_2
    Routine parent_video
    Routine eyelink_stop
    Routine fixation
    LoopInitiator image_loop loopType="TrialHandler"
      conditionsFile = $"stimuli/" + condition + ".csv"
      loopType = sequential
      nReps = 1
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      Routine eyelink_start_image
      Routine slideshow
      Routine eyelink_stop
    LoopTerminator image_loop
  LoopTerminator conditions_loop
  LoopInitiator sync_loop_end loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine clapperboard
  LoopTerminator sync_loop_end
  Routine end_experiment
